<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM23</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>33</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>V_3V3_1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="INdex" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>V_3V3_2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="INdex" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>V_Plus_1</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="INdex" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>V_Plus_2</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="INdex" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>3</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>33</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Pass/Fail</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>7</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>CurrentState</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>6</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>33</harp:Address>
          <harp:PayloadType>Timestamp</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:Address>33</harp:Address>
          <harp:PayloadType>Float</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Sw_Start</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="INdex" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>4</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Sw_LedsSequence</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="INdex" />
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="6" Label="Source1" />
      <Edge From="0" To="9" Label="Source1" />
      <Edge From="0" To="10" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>